CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|/Users/connerkummerlowe/one_image_all_plates/KI-CAS1_200214040001
    Name of the file:files.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:preDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:preER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigGolgi
    Name the output image:preGolgi
    Select the illumination function:IllumGolgi
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:preMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigNucleoli
    Name the output image:preNucleoli
    Select the illumination function:IllumNucleoli
    Select how the illumination function is applied:Divide

ImageMath:[module_num:3|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DNA
    Image or measurement?:Image
    Select the first image:preDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:4|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ER
    Image or measurement?:Image
    Select the first image:preER
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:5|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Golgi
    Image or measurement?:Image
    Select the first image:preGolgi
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:6|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Mito
    Image or measurement?:Image
    Select the first image:preMito
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:7|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Nucleoli
    Image or measurement?:Image
    Select the first image:preNucleoli
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MeasureImageQuality:[module_num:8|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:9|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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigDNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigNucleoli
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

FlagImage:[module_num:10|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Input Folder sub-folder|qc
    Rules file name:is_saturated_rules.txt
    Class number:1

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.015,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Nucleoli
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.002,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:13|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:14|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
    Hidden:5
    Hidden:3
    Select an image to measure:DNA
    Select an image to measure:Mito
    Select an image to measure:ER
    Select an image to measure:Nucleoli
    Select an image to measure:Golgi
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei
    Select an object to measure:Cells
    Select an object to measure:Cytoplasm
    Run all metrics?:Yes
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
MeasureGranularity:[module_num:15|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
    Image count:5
    Object count:1
    Select an image to measure:DNA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:Mito
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:3
    Select an image to measure:ER
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:3
    Select an image to measure:Golgi
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:Nucleoli
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:16|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
    Hidden:5
    Select an image to measure:DNA
    Select an image to measure:ER
    Select an image to measure:Nucleoli
    Select an image to measure:Golgi
    Select an image to measure:Mito
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells

MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:19|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:20|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
    Hidden:5
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:DNA
    Select an image to measure:ER
    Select an image to measure:Nucleoli
    Select an image to measure:Golgi
    Select an image to measure:Mito
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:21|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:22|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
    Hidden:5
    Hidden:3
    Hidden:3
    Select an image to measure:DNA
    Select an image to measure:ER
    Select an image to measure:Nucleoli
    Select an image to measure:Golgi
    Select an image to measure:Mito
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10
    Measure images or objects?:Both

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nuclei

OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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