CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:4
HasImagePlaneDetails:False

LoadData:[module_num:1|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notes:['']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
    Input data file location:Default Input Folder|
    Name of the file:load_data.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

MeasureImageQuality:[module_num:2|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:3|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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigDNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigNucleoli
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

ExportToDatabase:[module_num:4|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
    Database type:MySQL / CSV
    Database name:test
    Add a prefix to table names?:Yes
    Table prefix:test_
    SQL file prefix:test_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
    Database host:
    Username:
    Password:
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    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:test
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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